PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['data/data_PARTICIPANT_demo2 draft_1.csv', 'data/PARTICIPANT_demo2 draft_1.csv', 'data_PARTICIPANT_demo2_draft_1.csv', 'test_blank.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Graphical Reproduction Experiment
  logging level = debug
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Routines
  Routine trial
    TextComponent intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Graphical Serial Reproduction Experiment.

        You will be shown an image of a graph. The graph will dissappear, and you will be asked to reproduce it using your mouse.
    ImageComponent starting_graph
      image = test_blank.png
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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    TextComponent intermediate_text
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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      text:
        Using your mouse, reproduce the graph previously shown.

        Press the space bar when finished.
    ImageComponent blank_graph
      image = test_blank.png
      size = (0.5, 0.5)
      startVal [time (s)] = 6
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    KeyboardComponent key_resp
      allowedKeys = 'enter','space'
      forceEndRoutine = True
      startVal [time (s)] = 6
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 6
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Flow
  Routine trial
